<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:BciNoMovementDataSchema.Logging;assembly=Extensions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:p3="clr-namespace:Harp.LoadCells;assembly=Harp.LoadCells"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p4="clr-namespace:Harp.TimestampGeneratorGen3;assembly=Harp.TimestampGeneratorGen3"
                 xmlns:p5="clr-namespace:;assembly=Extensions"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:p6="clr-namespace:Harp.Behavior;assembly=Extensions"
                 xmlns:p7="clr-namespace:Harp.LoadCells;assembly=Extensions"
                 xmlns:p8="clr-namespace:Harp.TimestampGenerator3;assembly=Extensions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[# TODO

- track potential skipped frames


Parameters:

Bci voltage to spout velocity]]></Text>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>StartLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:SoftwareEvent">
              <rx:Name>SoftwareEvent</rx:Name>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpDevices</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Annotation">
                    <Name>PinOut</Name>
                    <Text><![CDATA[| Function | HarpBehavior Pin | Notes |
| --- | ----------- | ----------- |
| Camera Trigger | DO0 |  |
| Water Valve | Port0 Supply |  Use a poke breakout |
| Lickometer | Port0 DI |  Use a poke breakout |
| Encoder B | Port2 DIO | Use a poke breakout |
| Encoder A | Port2 DI | Use a poke breakout |
| Thermistor | ADC0 |  |
| Pressure Sensor | ADC1 |  |
| Photodiode | DI3 |  |
| Servo Motor | DO2 |  |
| Audio Buzzer | DO1 |  |

]]></Text>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>HarpBehavior</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                          <rx:Name>HarpBehaviorCommands</rx:Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="beh:Device">
                            <harp:OperationMode>Active</harp:OperationMode>
                            <harp:OperationLed>On</harp:OperationLed>
                            <harp:DumpRegisters>false</harp:DumpRegisters>
                            <harp:VisualIndicators>On</harp:VisualIndicators>
                            <harp:Heartbeat>Enabled</harp:Heartbeat>
                            <harp:IgnoreErrors>false</harp:IgnoreErrors>
                            <harp:PortName>COM11</harp:PortName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>HarpBehaviorEvents</Name>
                        </Expression>
                        <Expression xsi:type="harp:Parse">
                          <harp:Register xsi:type="harp:TimestampedTimestampSeconds" />
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>HarpBehaviorHeartBeat</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpBehaviorHeartBeat</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StartExperiment</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Annotation">
                          <Name>ForceRegisterDump</Name>
                          <Text><![CDATA[]]></Text>
                        </Expression>
                        <Expression xsi:type="harp:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                            <harp:OperationMode>Active</harp:OperationMode>
                            <harp:DumpRegisters>true</harp:DumpRegisters>
                            <harp:MuteReplies>false</harp:MuteReplies>
                            <harp:VisualIndicators>On</harp:VisualIndicators>
                            <harp:OperationLed>On</harp:OperationLed>
                            <harp:Heartbeat>Enabled</harp:Heartbeat>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>HarpBehaviorCommands</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpBehaviorEvents</Name>
                        </Expression>
                        <Expression xsi:type="beh:FilterRegister">
                          <harp:FilterType>Include</harp:FilterType>
                          <harp:Register xsi:type="beh:AnalogData" />
                        </Expression>
                        <Expression xsi:type="harp:Parse">
                          <harp:Register xsi:type="harp:ParseMessagePayload">
                            <harp:PayloadType>Timestamp</harp:PayloadType>
                            <harp:IsArray>false</harp:IsArray>
                          </harp:Register>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpBehaviorHeartBeat</Name>
                        </Expression>
                        <Expression xsi:type="beh:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="beh:CreateEventEnablePayload">
                            <beh:EventEnable>PortDI PortDIO AnalogData Camera0 Camera1</beh:EventEnable>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>HarpBehaviorCommands</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>CameraControl</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HarpBehaviorHeartBeat</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="beh:CreateMessage">
                                <harp:MessageType>Write</harp:MessageType>
                                <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
                                  <beh:StartCameras>CameraOutput0</beh:StartCameras>
                                </harp:Payload>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>HarpBehaviorCommands</Name>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>WaterValve</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HarpBehaviorHeartBeat</Name>
                              </Expression>
                              <Expression xsi:type="Annotation">
                                <Name>Valve+Speaker</Name>
                                <Text><![CDATA[]]></Text>
                              </Expression>
                              <Expression xsi:type="beh:CreateMessage">
                                <harp:MessageType>Write</harp:MessageType>
                                <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
                                  <beh:OutputPulseEnable>SupplyPort0 DO1</beh:OutputPulseEnable>
                                </harp:Payload>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>HarpBehaviorCommands</Name>
                              </Expression>
                              <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Double">
                                <rx:Name>ValveOpenTimeMs</rx:Name>
                              </Expression>
                              <Expression xsi:type="beh:Format">
                                <harp:MessageType>Write</harp:MessageType>
                                <harp:Register xsi:type="beh:PulseSupplyPort0" />
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>HarpBehaviorCommands</Name>
                              </Expression>
                              <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
                                <rx:Name>TriggerValve</rx:Name>
                              </Expression>
                              <Expression xsi:type="beh:CreateMessage">
                                <harp:MessageType>Write</harp:MessageType>
                                <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                                  <beh:OutputSet>SupplyPort0</beh:OutputSet>
                                </harp:Payload>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>HarpBehaviorCommands</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Lickometer</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HarpBehaviorEvents</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="harp:FilterMessageType">
                                  <harp:FilterType>Include</harp:FilterType>
                                  <harp:MessageType>Event</harp:MessageType>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="beh:Parse">
                                <harp:Register xsi:type="beh:TimestampedDigitalInputState" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value</Selector>
                              </Expression>
                              <Expression xsi:type="BitwiseAnd">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                                  <Value>DIPort0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="GreaterThan">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                                  <Value>0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:DistinctUntilChanged" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2.Seconds</Selector>
                              </Expression>
                              <Expression xsi:type="rx:PublishSubject">
                                <Name>LickEvent</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="2" To="7" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Adc</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HarpBehaviorEvents</Name>
                              </Expression>
                              <Expression xsi:type="beh:Parse">
                                <harp:Register xsi:type="beh:TimestampedAnalogData" />
                              </Expression>
                              <Expression xsi:type="rx:PublishSubject">
                                <Name>AnalogData</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>AnalogData</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value.AnalogInput0,Seconds</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="harp:CreateTimestamped" />
                              </Expression>
                              <Expression xsi:type="rx:PublishSubject">
                                <Name>BciSignal</Name>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Buzzer</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Double">
                                <rx:Name>AudioDuration</rx:Name>
                              </Expression>
                              <Expression xsi:type="Multiply">
                                <Operand xsi:type="IntProperty">
                                  <Value>1000</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="beh:Format">
                                <harp:MessageType>Write</harp:MessageType>
                                <harp:Register xsi:type="beh:PulseDO1" />
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>HarpBehaviorCommands</Name>
                              </Expression>
                              <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
                                <rx:Name>AudioFrequency</rx:Name>
                              </Expression>
                              <Expression xsi:type="beh:Format">
                                <harp:MessageType>Write</harp:MessageType>
                                <harp:Register xsi:type="beh:PwmFrequencyDO1" />
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>HarpBehaviorCommands</Name>
                              </Expression>
                              <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
                                <rx:Name>AudioTrigger</rx:Name>
                              </Expression>
                              <Expression xsi:type="beh:CreateMessage">
                                <harp:MessageType>Write</harp:MessageType>
                                <harp:Payload xsi:type="beh:CreatePwmStartPayload">
                                  <beh:PwmStart>PwmDO1</beh:PwmStart>
                                </harp:Payload>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>HarpBehaviorCommands</Name>
                              </Expression>
                              <Expression xsi:type="GroupWorkflow">
                                <Name>InitialSettings</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>HarpBehaviorHeartBeat</Name>
                                    </Expression>
                                    <Expression xsi:type="beh:CreateMessage">
                                      <harp:MessageType>Write</harp:MessageType>
                                      <harp:Payload xsi:type="beh:CreatePwmDutyCycleDO1Payload">
                                        <beh:PwmDutyCycleDO1>50</beh:PwmDutyCycleDO1>
                                      </harp:Payload>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>HarpBehaviorCommands</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>HarpBehaviorHeartBeat</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="DoubleProperty">
                                        <Value>1</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>AudioDuration</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>HarpBehaviorHeartBeat</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="IntProperty">
                                        <Value>500</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>AudioFrequency</Name>
                                    </Expression>
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                    <Edge From="8" To="9" Label="Source1" />
                                    <Edge From="9" To="10" Label="Source1" />
                                    <Edge From="10" To="11" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HarpBehaviorHeartBeat</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:SubscribeWhen" />
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="10" To="13" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source2" />
                            </Edges>
                          </Workflow>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="9" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>HarpLoadCells</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                          <rx:Name>HarpLoadCellsCommands</rx:Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:Device">
                            <harp:OperationMode>Active</harp:OperationMode>
                            <harp:OperationLed>On</harp:OperationLed>
                            <harp:DumpRegisters>true</harp:DumpRegisters>
                            <harp:VisualIndicators>On</harp:VisualIndicators>
                            <harp:Heartbeat>Disabled</harp:Heartbeat>
                            <harp:IgnoreErrors>false</harp:IgnoreErrors>
                            <harp:PortName>COM7</harp:PortName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>HarpLoadCellsEvents</Name>
                        </Expression>
                        <Expression xsi:type="harp:Parse">
                          <harp:Register xsi:type="harp:TimestampedTimestampSeconds" />
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>HarpLoadCellsHeartBeat</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpLoadCellsHeartBeat</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StartExperiment</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Annotation">
                          <Name>ForceRegisterDump</Name>
                          <Text><![CDATA[]]></Text>
                        </Expression>
                        <Expression xsi:type="harp:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                            <harp:OperationMode>Active</harp:OperationMode>
                            <harp:DumpRegisters>true</harp:DumpRegisters>
                            <harp:MuteReplies>false</harp:MuteReplies>
                            <harp:VisualIndicators>On</harp:VisualIndicators>
                            <harp:OperationLed>On</harp:OperationLed>
                            <harp:Heartbeat>Enabled</harp:Heartbeat>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>HarpLoadCellsCommands</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpBehaviorHeartBeat</Name>
                        </Expression>
                        <Expression xsi:type="p3:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p3:CreateEnableEventsPayload">
                            <p3:EnableEvents>LoadCellData DigitalInput SyncOutput</p3:EnableEvents>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>HarpLoadCellsCommands</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpBehaviorHeartBeat</Name>
                        </Expression>
                        <Expression xsi:type="p3:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p3:CreateAcquisitionStatePayload">
                            <p3:AcquisitionState>Enabled</p3:AcquisitionState>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>HarpLoadCellsCommands</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpLoadCellsEvents</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:FilterMessageType">
                            <harp:FilterType>Include</harp:FilterType>
                            <harp:MessageType>Event</harp:MessageType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="harp:Parse">
                          <harp:Register xsi:type="harp:ParseMessagePayload">
                            <harp:Address>33</harp:Address>
                            <harp:PayloadType>TimestampedS16</harp:PayloadType>
                            <harp:IsArray>true</harp:IsArray>
                          </harp:Register>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>LoadCellsData</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Int32,sys:Int32)">
                          <rx:Name>OffsetLoadCellChannel</rx:Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(Item1  as Channel, Item2 as Offset)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Channel</Selector>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>(it &gt; 0) and (it &lt; 8)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Channel</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>GetRegisterNumber</scr:Name>
                          <scr:Expression>it + 48</scr:Expression>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Offset</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:Rescale">
                            <dsp:Min>-255</dsp:Min>
                            <dsp:Max>255</dsp:Max>
                            <dsp:RangeMin>255</dsp:RangeMin>
                            <dsp:RangeMax>255</dsp:RangeMax>
                            <dsp:RescaleType>Clamp</dsp:RescaleType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="Address" Selector="Item1" />
                            <Property Name="Value" Selector="Item2" />
                          </PropertyMappings>
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="harp:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="harp:CreateMessagePayload">
                            <harp:Address>49</harp:Address>
                            <harp:PayloadType>S16</harp:PayloadType>
                            <harp:Value>255</harp:Value>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>HarpLoadCellsCommands</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="9" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source1" />
                        <Edge From="24" To="26" Label="Source1" />
                        <Edge From="25" To="26" Label="Source2" />
                        <Edge From="27" To="28" Label="Source1" />
                        <Edge From="28" To="29" Label="Source1" />
                        <Edge From="29" To="30" Label="Source1" />
                        <Edge From="29" To="32" Label="Source1" />
                        <Edge From="30" To="31" Label="Source1" />
                        <Edge From="31" To="34" Label="Source1" />
                        <Edge From="32" To="33" Label="Source1" />
                        <Edge From="33" To="34" Label="Source2" />
                        <Edge From="34" To="35" Label="Source1" />
                        <Edge From="35" To="36" Label="Source1" />
                        <Edge From="36" To="37" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>HarpTimestampGenerator3</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                          <rx:Name>HarpClkGenCommands</rx:Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p4:Device">
                            <harp:OperationMode>Active</harp:OperationMode>
                            <harp:OperationLed>On</harp:OperationLed>
                            <harp:DumpRegisters>true</harp:DumpRegisters>
                            <harp:VisualIndicators>On</harp:VisualIndicators>
                            <harp:Heartbeat>Disabled</harp:Heartbeat>
                            <harp:IgnoreErrors>false</harp:IgnoreErrors>
                            <harp:PortName>COMx</harp:PortName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>HarpClkGenEvents</Name>
                        </Expression>
                        <Expression xsi:type="harp:Parse">
                          <harp:Register xsi:type="harp:TimestampedTimestampSeconds" />
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>HarpClkGenHeartBeat</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpClkGenHeartBeat</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StartExperiment</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Annotation">
                          <Name>ForceRegisterDump</Name>
                          <Text><![CDATA[]]></Text>
                        </Expression>
                        <Expression xsi:type="harp:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                            <harp:OperationMode>Active</harp:OperationMode>
                            <harp:DumpRegisters>true</harp:DumpRegisters>
                            <harp:MuteReplies>false</harp:MuteReplies>
                            <harp:VisualIndicators>On</harp:VisualIndicators>
                            <harp:OperationLed>On</harp:OperationLed>
                            <harp:Heartbeat>Enabled</harp:Heartbeat>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>HarpClkGenCommands</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="9" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Cameras</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="FrameRate" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>120</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>CameraFrameRate</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraFrameRate</Name>
                  </Expression>
                  <Expression xsi:type="beh:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="beh:Camera0Frequency" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpBehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessageType">
                      <harp:FilterType>Include</harp:FilterType>
                      <harp:MessageType>Event</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="beh:FrameAcquired">
                      <Value>FrameAcquired</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>CameraTriggers</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="SerialNumber" DisplayName="Camera0SerialNumber" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:AindSpinnakerCapture">
                      <spk:Index xsi:nil="true" />
                      <spk:ColorProcessing>Default</spk:ColorProcessing>
                      <p5:ExposureTime>7000</p5:ExposureTime>
                      <p5:Gain>0</p5:Gain>
                      <p5:Binning>1</p5:Binning>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraTriggers</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Camera0FrameEvent</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="SerialNumber" DisplayName="Camera1SerialNumber" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:AindSpinnakerCapture">
                      <spk:Index xsi:nil="true" />
                      <spk:ColorProcessing>Default</spk:ColorProcessing>
                      <p5:ExposureTime>7000</p5:ExposureTime>
                      <p5:Gain>0</p5:Gain>
                      <p5:Binning>1</p5:Binning>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraTriggers</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Camera1FrameEvent</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="9" To="14" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="20" Label="Source1" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="26" Label="Source1" />
                  <Edge From="25" To="26" Label="Source2" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>OperationControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>LoadCellProcessing</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>LoadCellIndex</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoadCellsData</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoadCellIndex</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>LoadCellData</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>BciProcessing</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BciSignal</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>AdcUnitsToVoltage</scr:Name>
                    <scr:Expression>((it * 5.0) / 3972.0)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>VoltageToSpoutVelocity</scr:Name>
                    <scr:Expression>it</scr:Expression>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT0S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>InterTrialInterval</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TaskLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>InterTrialInterval</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>BciStep</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GiveReward?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>UpdateSettings</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="RootPath" />
              <Property Name="Subject" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\GenerateRootLoggingPath.bonsai">
              <RootPath xsi:nil="true" />
              <Subject xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LoggingRootPath</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpLogging</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpBehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p6:FilterVisibility" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="beh:GroupByRegister" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\GenerateHarpLoggingPath.bonsai">
                    <LogName>harpDevice</LogName>
                    <Extension>bin</Extension>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:MessageWriter">
                      <harp:Suffix>None</harp:Suffix>
                      <harp:Buffered>true</harp:Buffered>
                      <harp:Overwrite>false</harp:Overwrite>
                      <harp:FilterType>Include</harp:FilterType>
                      <harp:MessageType xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpLoadCellsEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p7:FilterVisibility" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:GroupByRegister" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\GenerateHarpLoggingPath.bonsai">
                    <LogName>harpDevice</LogName>
                    <Extension>bin</Extension>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:MessageWriter">
                      <harp:Suffix>None</harp:Suffix>
                      <harp:Buffered>true</harp:Buffered>
                      <harp:Overwrite>false</harp:Overwrite>
                      <harp:FilterType>Include</harp:FilterType>
                      <harp:MessageType xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpClkGenEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p8:FilterVisibility" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p4:GroupByRegister" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\GenerateHarpLoggingPath.bonsai">
                    <LogName>harpDevice</LogName>
                    <Extension>bin</Extension>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:MessageWriter">
                      <harp:Suffix>None</harp:Suffix>
                      <harp:Buffered>true</harp:Buffered>
                      <harp:Overwrite>false</harp:Overwrite>
                      <harp:FilterType>Include</harp:FilterType>
                      <harp:MessageType xsi:nil="true" />
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="17" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Camera</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\GenerateSpinnakerLoggingPath.bonsai">
                    <LogName>camera</LogName>
                    <EncodingFrameRate>60</EncodingFrameRate>
                    <VideoExtension>avi</VideoExtension>
                    <MetadataExtension>csv</MetadataExtension>
                    <Codec>FMP4</Codec>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Camera0LoggerPath</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\GenerateSpinnakerLoggingPath.bonsai">
                    <LogName>camera</LogName>
                    <EncodingFrameRate>60</EncodingFrameRate>
                    <VideoExtension>avi</VideoExtension>
                    <MetadataExtension>csv</MetadataExtension>
                    <Codec>FMP4</Codec>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Camera1LoggerPath</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Camera0FrameEvent</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Camera0LoggerPath</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Metadata</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                    <io:Selector>Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp</io:Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Image</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Camera0LoggerPath</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" Selector="Video" />
                      <Property Name="FrameRate" Selector="Logger.EncodingFrameRate" />
                      <Property Name="FourCC" Selector="Logger.Codec" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:Suffix>None</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>FMP4</cv:FourCC>
                      <cv:FrameRate>30</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Camera1FrameEvent</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Camera1LoggerPath</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Metadata</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                    <io:Selector>Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp</io:Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Image</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Camera1LoggerPath</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" Selector="Video" />
                      <Property Name="FrameRate" Selector="Logger.EncodingFrameRate" />
                      <Property Name="FourCC" Selector="Logger.Codec" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:Suffix>None</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>FMP4</cv:FourCC>
                      <cv:FrameRate>30</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="10" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="14" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="15" To="19" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="23" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SoftwareEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SoftwareEvent</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:TimestampSoftwareEvent" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogSoftwareEventsDemux.bonsai">
                    <LoggerName>SoftwareEvents</LoggerName>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
        <rx:Name>EndExperiment</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>EndRoutine</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>